CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['in Exp287:', 'All metadata settings were changed, in order to fit to the way the files are organized in Incucyte Archive format. ', 'This was done because it saves time in extracting the images to work directly on the archived pictures, although they are less-comfortably annotated. ', '', 'in Exp285: ', '  1) parameter change in identify primery object,', '  2) remove nuclei filtration, track unfiltered nuc.', 'Exp282:', '  Based on exp270:', '    Based on Exp264', '    Based on Exp258_plate1 (RVNP pilot)', '    main change: track with "follow neighbors" algorithm to deal with frame drifts.', '  Additionally:', '    measure and substract background', '    measure image-based parameters']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', "Here we're going to extract the well location that each image was taken in.  We'll also collect the folder the images reside in, so that we can match the illumination correction function with each well next step in NamesAndTypes."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z][0-9]{1,2})-(?P<Site>[0-9]{1,2})-C(?P<Chan>[0-9]).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:^(?P<Dir>.*)[\\/](?P<Year>[0-9]{2})(?P<Month>[0-9]{2})[\\/](?P<Day>[0-9]{1,2})[\\/](?P<Hour>[0-9]{2})(?P<Min>[0-9]{2})[\\/](?P<Vessel>\d+)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the images by matching files in the folder against the unique text pattern for each stain: 'Channel 1' for protein, 'Channel 2' for the nuclei image. Also, exactly match the text for the illumination correction function file names. ", '', '---', 'So that you can match each well\\'s images to the single set of illumination correction functions, rather than matching the image set by "Order" we\\'ve matched it by "Metadata", which allows us to instruct CellProfiler that each well will have its own set of OrigDNA and OrigProtein images but that they\\'ll all use the illumination correction function found in the same folder.', '', '']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigGreen': u'Vessel', u'OrigRed': u'Vessel'}, {u'OrigGreen': u'Well', u'OrigRed': u'Well'}, {u'OrigGreen': u'Site', u'OrigRed': u'Site'}, {u'OrigGreen': u'Year', u'OrigRed': u'Year'}, {u'OrigGreen': u'Month', u'OrigRed': u'Month'}, {u'OrigGreen': u'Day', u'OrigRed': u'Day'}, {u'OrigGreen': u'Hour', u'OrigRed': u'Hour'}, {u'OrigGreen': u'Min', u'OrigRed': u'Min'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "C1.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "C2.tif")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Vessel
    Metadata category:Well
    Metadata category:Site

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigGreen
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigRed
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Splines
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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    Automatically calculate spline parameters?:Yes
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
CorrectIlluminationApply:[module_num:7|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notes:['Correct both images by applying the illumination correction functions through division. ']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
    Select the input image:OrigGreen
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract
    Select the input image:OrigRed
    Name the output image:CorrRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:CorrRed
    Name the output image:EnhRed
    Select the operation:Enhance
    Feature size:25
    Feature type:Speckles
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    Speed and accuracy:Fast

RescaleIntensity:[module_num:9|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
    Select the input image:CorrGreen
    Name the output image:RescaleGreen
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:CorrRed
    Name the output image:RescaleRed
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:11|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notes:['exp285: parameter change 20/4/20', 'min diameter = 9 (was 10)', 'threshold smoothing scale = 0.8 (was 0)']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
    Select the input image:EnhRed
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):9,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.8
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:5
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
MaskImage:[module_num:12|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notes:['Added in 280: for background substraction']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
    Select the input image:CorrGreen
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:13|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notes:['Added in 280: for background substraction']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
    Select the image to measure:MaskGreen
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:14|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notes:['Added in 280: for background substraction']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:CorrGreenBgSub
    Image or measurement?:Image
    Select the first image:CorrGreen
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_MaskGreen

MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:RescaleRed
    Select objects to measure:Nuclei

TrackObjects:[module_num:16|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notes:['ADDED exp285 20/4/20 - unfiltered nuc tracking, improves overall tracking performence']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
    Choose a tracking method:Follow Neighbors
    Select the objects to track:Nuclei
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNuclei
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:24
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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    Average cell diameter in pixels:20
    Use advanced configuration parameters:Yes
    Cost of cell to empty matching:100
    Weight of area difference in function matching cost:100

MeasureImageIntensity:[module_num:17|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notes:['Added in 280, to make it easy to graph image-based data (originally - the decline in fluorescence in the presence of DEX)']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
    Select the image to measure:CorrGreen
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Nuclei
    Select the image to measure:CorrGreenBgSub
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Nuclei

MeasureObjectIntensity:[module_num:18|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
    Hidden:5
    Select an image to measure:RescaleRed
    Select an image to measure:CorrRed
    Select an image to measure:CorrGreen
    Select an image to measure:RescaleGreen
    Select an image to measure:CorrGreenBgSub
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:20|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|C:\\\\Users\\\\galman\\\\Documents\\\\exp285_out
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Exp329_
    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:21|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:\\data.wexac.weizmann.ac.il\gadasher\galman\exp329\
    Cluster root path:/home/labs/gadasher/galman/exp329/
